PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = short term memory
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        welcome

        Press spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A series of words will appear , each word lasting for a short periods of time
        try to remember them

        press spacebar to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine studytrial
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    TextComponent text_3
      color [set every repeat] = $WordColour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $WordItem
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  Routine blankscreen
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine wait
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    TextComponent textwait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press either 'Y' for yes and 'N' for no if it was from study words

        press spacebar to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_trials
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $WordItem
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = THANKYOU
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Flow
  Routine trial
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = studyWord.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'Japan', 'WordColour': 'Red'},
      {'WordItem': 'India', 'WordColour': 'Red'},
      {'WordItem': 'Africa ', 'WordColour': 'Red'},
      {'WordItem': 'France', 'WordColour': 'Blue'},
      {'WordItem': 'Russia', 'WordColour': 'Red'},
      {'WordItem': 'Argentina', 'WordColour': 'Red'},
      {'WordItem': 'Brazil', 'WordColour': 'Blue'},
      {'WordItem': 'Canada', 'WordColour': 'Red'},
      {'WordItem': 'Egypt', 'WordColour': 'Red'},
      {'WordItem': 'Germany', 'WordColour': None},
      {'WordItem': 'Turkey', 'WordColour': None},
      {'WordItem': 'England', 'WordColour': None},
      {'WordItem': 'America', 'WordColour': None},
      {'WordItem': 'China', 'WordColour': None},
      {'WordItem': 'Europe', 'WordColour': None}]
    Routine studytrial
    Routine blankscreen
  LoopTerminator trials
  Routine wait
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = studyWord.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'WordItem': 'Japan', 'WordColour': 'Red'},
      {'WordItem': 'India', 'WordColour': 'Red'},
      {'WordItem': 'Africa ', 'WordColour': 'Red'},
      {'WordItem': 'France', 'WordColour': 'Blue'},
      {'WordItem': 'Russia', 'WordColour': 'Red'},
      {'WordItem': 'Argentina', 'WordColour': 'Red'},
      {'WordItem': 'Brazil', 'WordColour': 'Blue'},
      {'WordItem': 'Canada', 'WordColour': 'Red'},
      {'WordItem': 'Egypt', 'WordColour': 'Red'},
      {'WordItem': 'Germany', 'WordColour': None},
      {'WordItem': 'Turkey', 'WordColour': None},
      {'WordItem': 'England', 'WordColour': None},
      {'WordItem': 'America', 'WordColour': None},
      {'WordItem': 'China', 'WordColour': None},
      {'WordItem': 'Europe', 'WordColour': None}]
    Routine test_trials
  LoopTerminator trials_2
  Routine end
