PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = word primming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_words
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'book'},
      {'study_words': 'cushion'},
      {'study_words': 'phone'},
      {'study_words': 'marble'},
      {'study_words': 'board'},
      {'study_words': 'Laptop'},
      {'study_words': 'Chart'},
      {'study_words': 'T-shirt'},
      {'study_words': 'mouse'},
      {'study_words': 'Pastry'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_oo_', 'refernce': 'book', 'old_new': 'old'},
      {'test': 'c_sh_o_', 'refernce': 'cushion', 'old_new': 'old'},
      {'test': 'p_on_', 'refernce': 'phone', 'old_new': 'old'},
      {'test': '_ar__e', 'refernce': 'marble', 'old_new': 'old'},
      {'test': 'b_ar_', 'refernce': 'board', 'old_new': 'old'},
      {'test': '_a_t_p', 'refernce': 'Laptop', 'old_new': 'old'},
      {'test': 'c_a_t', 'refernce': 'Chart', 'old_new': 'old'},
      {'test': 't-_hir_', 'refernce': 'T-shirt', 'old_new': 'old'},
      {'test': 'm_u_e', 'refernce': 'mouse', 'old_new': 'old'},
      {'test': '_as_r_', 'refernce': 'Pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'refernce': 'Case', 'old_new': 'new'},
      {'test': 'cr_i_e', 'refernce': 'Cruise', 'old_new': 'new'},
      {'test': '_o_ic_', 'refernce': 'Police', 'old_new': 'new'},
      {'test': 'k_ys', 'refernce': 'Keys', 'old_new': 'new'},
      {'test': 'po_s_r', 'refernce': 'Poster', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
